/control/alias time 0.01

# ============================
# == LOAD DATABASE           ==
# ===========================
/gate/geometry/setMaterialDatabase    data/GateMaterials.db

# ============================ 
# ==   GEOMETRY             ==
# ===========================
/control/execute                     mac/CC_2planes.mac

# ============================
# ==   PHANTOM            ==
# ===========================
/control/execute                    mac/phantom.mac

# ============================
# ==  PHYSICS             ==
# ===========================
/gate/physics/addPhysicsList emstandard_opt4
/gate/physics/addProcess RadioactiveDecay
/control/execute                  mac/cuts.mac

#=============================
#== ACTOR
#==========================================
/control/execute mac/actor_ComptonCamera_2layers_clustering.mac

# ============================
# == INITIALIZE             ==
# ===========================
/gate/run/initialize

# ============================
# ==  VISUALIZATION            ==
# ===========================
#/control/execute                     mac/visu.mac

# ============================
# == SOURCE                 ==
# ============================
/control/execute                     mac/pointlikesource_centered.mac

# ============================
# == OUTPUT                ==
# ============================
/gate/application/noGlobalOutput

#=====================================================
#   M E A S U R E M E N T   S E T T I N G S   
#=====================================================
/gate/application/setTimeSlice  {time} s
/gate/application/setTimeStart   0.00   s
/gate/application/setTimeStop    {time} s
/gate/application/startDAQ

exit




