# TODO
# use Ai assistant as I did for corresponding file in Gate10:
# - READ HITS FILE AND ASK FOR A QT GUI DISPLAYING EVENT BY EVENT WITH MOUSE CLICKS
# - THEN CHECK IF FLUORESCENCE X-RAY TRACKS EXIST OR NOT !!!
# - THEN REVERT TO CdTe instead of Tungsten


/control/alias time 0.01
/control/alias out output
/control/alias seed 1
/control/alias energy_keV 140

# ===========================
# == LOAD DATABASE         ==
# ===========================
/gate/geometry/setMaterialDatabase    ../data/GateMaterials.db

# ===========================
# ==   GEOMETRY            ==
# ===========================
/control/execute                     mac/geometry.mac

# ===========================
# ==  PHYSICS              ==
# ===========================
# Of interest to Compton camera simulations are the following:
# - Compton scattering (Klein-Nishina equation, atomic electron at rest)
# - Doppler broadening (atomic electron not at rest in Compton scattering)
# - Photoelectric effect
# - Rayleigh scattering (outside and inside the detector)
# - Particle-induced X-ray emission (fluorescence and Auger), called PIXE in geant4 documentation

# ##### Physics lists #####
# emlivermore, emstandard_opt3 or emstandard_opt4 include doppler broadening
# emstandard, emstandard_opt1, emstandard_opt2 do not
/gate/physics/addPhysicsList emlivermore # WARNING: NOT livermore !!!
# => Fluorescence from photons and electrons is activated by default in Option3, Option4, Livermore and Penelope physics constructors, while Auger production and PIXE are not.

# ##### Physics processes #####
#/gate/physics/removeProcess msc e- # seems to not change anything
#/process/em/fluo false # this seems to have no effect
#/process/em/auger false # this seems to disable Auger electron cascade

# ##### Cuts  #####
# - For CdTe, distance <=> energy correspondence => aspect of Singles spectrum with adderComptPhotIdeal:
#   - 1000 um <=> gamma 40 keV / e- 859 keV => default, no fluorescence
#   - 100 um <=> gamma 10 keV / e- 171 keV => fluorescence, no fluorescence
#   - 10 um <=> gamma 2.5 keV / e- 43 keV => fluorescence (K peaks mainly)
#   - 1 um <=> gamma 1 keV / e- 2.6 keV => fluorescence (K + L peaks)
#   - 0.1 um <=> gamma 1 keV / e- 1 keV => more low energy singles, below that no difference anymore
# TODO: adderComptPhotIdeal does not record all singles when multiple fluorescence hits in same event
/gate/physics/Gamma/SetCutInRegion      absorber 10 um
/gate/physics/Electron/SetCutInRegion   absorber 10 um

# =============================
# == VERBOSITY               ==
# =============================
/process/em/verbose 0 # reduces the console output a lot !
/vis/verbose errors # reduces the console output
# TODO: line '### === G4UAtomicDeexcitation::InitialiseForNewRun()' appears twice (with full output)

# =============================
# == ACTORS                  ==
# =============================
/control/execute mac/actor.mac

# =============================
# == VERBOSITY               ==
# =============================
# /gate/physics/displayCuts
/process/em/verbose 0 # reduces the console output a lot
/vis/verbose errors # reduces the console output a bit
# TODO: line '### === G4UAtomicDeexcitation::InitialiseForNewRun()' appears twice (with full output)
#/gate/digitizer/layers/adderComptPhotIdeal/verbose 2
#/tracking/verbose 3

# ============================
# == INITIALIZE             ==
# ============================
/gate/run/initialize

# ============================
# ==  VISUALIZATION         ==
# ============================
# /control/execute                     mac/visu.mac

# ============================
# == SOURCE                 ==
# ============================
/control/execute                     mac/source_point.mac
#/control/execute                     mac/source_rectangles.mac
#/control/execute                     mac/source_3Dshapes.mac
#/control/execute                     mac/source_vox.mac

# ============================
# == OUTPUT                 ==
# ============================
/gate/application/noGlobalOutput # avoids output related to PET/SPECT systems

#====================================================
#  R A N D O M   E N G I N E  A N D  S E E D
#====================================================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed {seed} # 6781

#=====================================================
#   M E A S U R E M E N T   S E T T I N G S
#=====================================================
#/gate/application/setTimeSlice  {time} s
#/gate/application/setTimeStart   0.00   s
#/gate/application/setTimeStop    {time} s
/gate/application/setTotalNumberOfPrimaries 260
/gate/application/startDAQ
