/control/alias time 0.01
/control/alias out output
/control/alias seed 1
/control/alias energy_keV 140

# ===========================
# == LOAD DATABASE         ==
# ===========================
/gate/geometry/setMaterialDatabase    ../data/GateMaterials.db

# ===========================
# ==   GEOMETRY            ==
# ===========================
/control/execute                     mac/geometry.mac

# ===========================
# ==  PHYSICS              ==
# ===========================
# Of interest to Compton camera simulations are the following processes:
# - Compton scattering (Klein-Nishina equation, atomic electron at rest)
# - Doppler broadening (atomic electron not at rest in Compton scattering)
# - Photoelectric effect
# - Rayleigh scattering (outside and inside the detector)
# - Particle-induced X-ray emission (fluorescence and Auger), called PIXE in geant4 documentation
# ##### Physics list #####
# emlivermore, emstandard_opt3 or emstandard_opt4 include doppler broadening
# emstandard, emstandard_opt1, emstandard_opt2 do not
/gate/physics/addPhysicsList emlivermore
# => Fluorescence from photons and electrons is activated by default in Option3, Option4, Livermore and Penelope physics constructors, while Auger production and PIXE are not.
#/process/em/fluo false # this seems to have no effect
#/process/em/auger false # this seems to disable Auger electron cascade

# ##### Cuts  #####
# - Default to 1000 um
# - Above ~10 um, no eIoni, msc, eBrem hits, and PIXE (fluorescence and Auger)
# - Distance/energy correspondance for CdTe:
#   - 1000 um <=> gamma 40 keV / e- 859 keV => no fluorescence
#   - 100 um <=> gamma 10 keV / e- 171 keV => fluorescence
#   - 0.1 um <=> gamma 1 keV / e- 1 keV => most realistic lower energy spectrum, below that no difference
/gate/physics/Gamma/SetCutInRegion      absorber 0.1 um
/gate/physics/Electron/SetCutInRegion   absorber 0.1 um
/gate/physics/displayCuts

# =============================
# == VERBOSITY               ==
# =============================
/process/em/verbose 0 # reduces the console output a lot !
/vis/verbose errors # reduces the console output
# TODO: line '### === G4UAtomicDeexcitation::InitialiseForNewRun()' appears twice (with full output)

# =============================
# == ACTORS                  ==
# =============================
/control/execute mac/actor.mac

# ============================
# == INITIALIZE             ==
# ============================
/gate/run/initialize

# ============================
# ==  VISUALIZATION         ==
# ============================
#/control/execute                     mac/visu.mac

# ============================
# == SOURCE                 ==
# ============================
/control/execute                     mac/source_point.mac
#/control/execute                     mac/source_rectangles.mac
#/control/execute                     mac/source_3Dshapes.mac
#/control/execute                     mac/source_vox.mac

# ============================
# == OUTPUT                 ==
# ============================
/gate/application/noGlobalOutput # avoids output related to PET/SPECT systems

#====================================================
#  R A N D O M   E N G I N E  A N D  S E E D
#====================================================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed {seed} # 6781

#=====================================================
#   M E A S U R E M E N T   S E T T I N G S
#=====================================================
#/gate/application/setTimeSlice  {time} s
#/gate/application/setTimeStart   0.00   s
#/gate/application/setTimeStop    {time} s
/gate/application/setTotalNumberOfPrimaries 10000
/gate/application/startDAQ
