/gate/source/addSource VoxSource voxel
/gate/source/VoxSource/attachTo source_volume
/gate/source/VoxSource/reader/insert image
/gate/source/VoxSource/imageReader/translator/insert linear
/gate/source/VoxSource/imageReader/linearTranslator/setScale 0.001 Bq
/gate/source/VoxSource/imageReader/readFile mac/Defrise_200x200x200.h33
/gate/source/VoxSource/imageReader/verbose 1
/gate/source/VoxSource/gps/particle gamma
/gate/source/VoxSource/gps/ang/type iso
#/gate/source/VoxSource/gps/ang/mintheta 0.0 deg
#/gate/source/VoxSource/gps/ang/maxtheta 180.0 deg
#/gate/source/VoxSource/gps/ang/minphi 0.0  deg
#/gate/source/VoxSource/gps/ang/maxphi 360.0 deg
/gate/source/VoxSource/gps/direction 0 1 0 mm # helps for visualization
/gate/source/VoxSource/gps/energytype Mono
/gate/source/VoxSource/gps/ene/mono 140.5 keV # For Tc-99m
/gate/source/VoxSource/setIntensity 1
/gate/source/VoxSource/setPosition -100.0 -100.0 -100.0 mm
/gate/source/VoxSource/dump 1